
array <int> VA[4][50];      # V/A pairs for every stimulus in a block
array <int> V_order[200]= 
{
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 
	1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4, 1,2,3,4
};

#=== practice variables ========================================

array <int> practice[60] = 
{
	1,2,3,4,1,2,3,4,1,2,3,4,1,2,3,4,1,2,3,4,
	1,2,3,4,1,2,3,4,1,2,3,4,1,2,3,4,1,2,3,4,
	1,2,3,4,1,2,3,4,1,2,3,4,1,2,3,4,1,2,3,4
};

loop int i=1 until i>60
begin
	practice.shuffle(i,i+3);
	i=i+4;
end;	

array <string> pract_pict[4] = { "Ⴢ", "Ⴉ", "Ⴞ", "Ⴋ"}; 
array <string> pract_snd[4] =  { "cut_eeuw_stereo_44KHz.wav", "cut_oo_stereo_44KHz.wav", "cut_g_stereo_44KHz.wav", "cut_ee_stereo_44KHz.wav" }; 

pract_pict.shuffle();
pract_snd.shuffle();

#=== end practice setup ==============================================

array <int> pos_feedback[2][50];

array <int> iti[200] = 
{ 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 750, 1000, 500, 750, 1000, 500, 750, 1000, 
	500, 1000
};

#loop int i=1 until i>200 begin
#	term.print(V_order[i]);
#	term.print("\t");
#	i=i+1;
#end;	
#term.print("\n");
#term.print("\n");
	
sub randomize_block
begin	
	array <int> V1[50];      # V/A pairs for every stimulus in a block
	array <int> Vmm[1];
	Vmm.resize(nA2+nA3+nA4);

	# randomize the Visual stimulus order
	V_order.shuffle(1,4);
	loop int i=1 until i>49 begin
		V_order.shuffle(i*4+1,i*4+4);
		loop until V_order[i*4] != V_order[i*4+1] begin V_order.shuffle(i*4+1,i*4+4); end;
		i=i+1;
	end;	
		
	loop int i=0 until i>12 begin
		iti.shuffle(i*9+1,i*9+9);
		i=i+1;
	end;	
	iti.shuffle(199,200);
	
	loop int ii=1 until ii>4 begin

		# randomisation of the match/mismatch pairs
		# first randomise the V1 array with only match/(any)mismatch
		# then, build the mismatch array with the three different mismatch types
		# then randomise the mismatch order
		# then replace the fixed mismatches in the V1 array with the mismatch array Vmm

		V1.fill(1,nA1,1,0);         	# put '1' in the array -> match
		V1.fill(nA1+1,50,2,0);			# put '2' in the array -> mismatch 

		Vmm.fill(1,nA2,2,0);
		Vmm.fill(nA2+1,nA2+nA3,3,0); 
		Vmm.fill(nA2+nA3+1,nA2+nA3+nA4,4,0); 

		bool re_shuffle=true;
	
		# randomize the mismatch type, making sure no more than two follow each other per pict type
		loop until re_shuffle==false begin
			V1.shuffle();
			re_shuffle=false;
			loop int i=1 until i>48 begin
				if (V1[i]==1 && V1[i+1]==1 && V1[i+2]==1) then re_shuffle=true; i=50; end;
				i=i+1;
			end;
		end;	
			
		re_shuffle=true;
			
		# randomize the mismatch speech sounds	
		loop until re_shuffle==false begin
			Vmm.shuffle();
			re_shuffle=false;
			loop int i=1 until i>(nA2+nA3+nA4-3) begin
				if (Vmm[i]==Vmm[i+1] && Vmm[i+1]==Vmm[i+2] && Vmm[i+2]==Vmm[i+3]) then re_shuffle=true; i=50; end;
				i=i+1;
			end;
		end;	
			
		# we set the mismatch type in the V1 array fixed to '2'
		# here we adjust this value to the correct speech sound 
		loop 
			int i=1; 
			int j=1; 
		until i>50 begin
			if (V1[i]==2) then V1[i]=Vmm[j]; j=j+1; end;
			i=i+1;
		end;		
		
		# the VA is the array that we finally use to select the stimuli per trial
		# here, we load the stimulus order per stimulus type for each block
		loop int i=1 until i>50 begin
			VA[ii][i]=V1[i]; 
			i=i+1;
		end;
			
#		loop int i=1 until i>50 begin
#			term.print(VA[ii][i]);
#			term.print("\t");
#			i=i+1;
#		end;
#		term.print("\n");
		
		ii=ii+1;
	end;	
		
	#=== RANDOM FEEDBACK FOR INCONSISTENT V/A PAIRS

	int nr_pos=(percentage_positive*50)/100;


	pos_feedback[1].fill(1,nr_pos,1,0);
	pos_feedback[1].fill(nr_pos+1,pos_feedback[1].count(),0,0);

	pos_feedback[2].fill(1,nr_pos,1,0);
	pos_feedback[2].fill(nr_pos+1,pos_feedback[1].count(),0,0);

	pos_feedback[1].shuffle();
	pos_feedback[1].shuffle();
	pos_feedback[2].shuffle();
	pos_feedback[2].shuffle();

#	loop int i=1 until i>50 begin
#		term.print(pos_feedback[1][i]);
#		term.print("\t");
#		i=i+1;
#	end;

end;	

sub randomize_simple_block
begin
	array <int> V1[50];      # V/A pairs for every stimulus in a block
 
	# randomize the Visual stimulus order
	V_order.shuffle(1,4);
	loop int i=1 until i>49 begin
		V_order.shuffle(i*4+1,i*4+4);
		loop until V_order[i*4] != V_order[i*4+1] begin V_order.shuffle(i*4+1,i*4+4); end;
		i=i+1;
	end;	
		
	loop int i=0 until i>12 begin
		iti.shuffle(i*9+1,i*9+9);
		i=i+1;
	end;	
	iti.shuffle(199,200);
	
	loop int ii=1 until ii>4 begin

		# randomisation of the match/mismatch pairs
		# first randomise the V1 array with only match/(any)mismatch
		# then, build the mismatch array with the three different mismatch types
		# then randomise the mismatch order
		# then replace the fixed mismatches in the V1 array with the mismatch array Vmm

		loop int i=1 until i>50
		begin
			V1.fill(i,i+1,1,1);
			V1.shuffle(i,i+1);
			i=i+2;
		end;	

		# the VA is th array that we finally use to select the stimuli per trial
		# here, we load the stimulus order per stimulus type for each block
		loop int i=1 until i>50 begin
			if ( ii<3 ) then 
				VA[ii][i]=V1[i]; 
			else
				VA[ii][i]=V1[i]+2; 
			end;
			i=i+1;
		end;
			
#		loop int i=1 until i>50 begin
#			term.print(VA[ii][i]);
#			term.print("\t");
#			i=i+1;
#		end;
#		term.print("\n");
		
		ii=ii+1;
	end;	
	
	#=== RANDOM FEEDBACK FOR INCONSISTENT V/A PAIRS

	int nr_pos=(percentage_positive*50)/100;


	pos_feedback[1].fill(1,nr_pos,1,0);
	pos_feedback[1].fill(nr_pos+1,pos_feedback[1].count(),0,0);

	pos_feedback[2].fill(1,nr_pos,1,0);
	pos_feedback[2].fill(nr_pos+1,pos_feedback[1].count(),0,0);

	pos_feedback[1].shuffle();
	pos_feedback[1].shuffle();
	pos_feedback[2].shuffle();
	pos_feedback[2].shuffle();
end;

	
#=== array with the filenames of pictures and sounds  
     
#array <string> pict_file[24] = 
#{
#	"cs+1a.jpg", "cs+1b.jpg", "cs+1c.jpg", "cs+1d.jpg", 
#	"cs-2a.jpg", "cs-2b.jpg", "cs-2c.jpg", "cs-2d.jpg",
#	
#	"cs-2a.jpg", "cs-2b.jpg", "cs-2c.jpg", "cs-2d.jpg",
#	
#	"cs+1a.jpg", "cs+1b.jpg", "cs+1c.jpg", "cs+1d.jpg", 
#	"cs-2a.jpg", "cs-2b.jpg", "cs-2c.jpg", "cs-2d.jpg"
#};
array <string> pict_file[16] = 
{
	"Ⴜ", "Ⴁ", "Ⴂ", "Ⴃ", 
	"Ⴟ", "Ⴡ", "Ⴊ", "Ⴇ",
	#"Ⴢ", "Ⴥ", "Ⴞ", "Ⴋ",
	
	"Ⴌ", "Ⴉ", "Ⴖ", "Ⴏ", 
	"Ⴐ", "Ⴕ", "Ⴒ", "Ⴔ"
};

array <string> sound_file[16] =
{
	
	"cut_ui_stereo_44KHz.wav", "cut_s_stereo_44KHz.wav", "cut_ei_stereo_44KHz.wav", "cut_oei_stereo_44KHz.wav",
	"cut_n_stereo_44KHz.wav", "cut_r_stereo_44KHz.wav", "cut_f_stereo_44KHz.wav", "cut_j_stereo_44KHz.wav",
	
	"cut_g_stereo_44KHz.wav", "cut_l_stereo_44KHz.wav", "cut_w_stereo_44KHz.wav", "cut_h_stereo_44KHz.wav",
	
	"cut_a_stereo_44KHz.wav", "cut_k_stereo_44KHz.wav", "cut_u_stereo_44KHz.wav", "cut_o_stereo_44KHz.wav" 
	#"cut_eeuw_stereo_44KHz.wav", "cut_ieuw_stereo_44KHz.wav", "cut_nk_stereo_44KHz.wav", "cut_ooi_stereo_44KHz.wav",	
};


# sound_file.shuffle();
sound_file.shuffle( 1, 8);
sound_file.shuffle( 9, 12);
sound_file.shuffle(13,16);
#sound_file.shuffle(17,20);


#array <int> snd_array_offset[5]= {0,4,8,12,16};
#snd_array_offset.shuffle();
array <int> snd_array_offset[4]= {0,4,8,12};
snd_array_offset.shuffle();

pict_file.shuffle( 1, 8);
pict_file.shuffle( 9, 16);
#pict_file.shuffle( 9,12);
#pict_file.shuffle(13,16);
#pict_file.shuffle(17,20);
#pict_file.shuffle(21,24);

#array <int> pict_array_offset[5]= {0,4,8,12,16};
#pict_array_offset.shuffle();
array <int> pict_array_offset[4]= {0,4,8,12};
pict_array_offset.shuffle();

array <string> activePict[4];
array <string> activeSnd[4];

sub string get_filename(string s)
begin
	array <string> parts[0];
	s.split("\\", parts);
	return parts[parts.count()];
end;


